CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:27
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage)

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:.*[\\\\\\\\/](?P<sample>.*)
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:(?P<imgseries>.*)_z
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
    Select the rule criteria:and (file does contain "ch00")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch01")
    Name to assign these images:SuccEst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch02")
    Name to assign these images:Capsid
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch03")
    Name to assign these images:vDNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify the nuclei from the DAPI image. Three-class thresholding performs better than the default two-class thresholding in this case.']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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):50,150
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:2
    Lower and upper bounds on threshold:0.1,1
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Method to calculate adaptive window size:Image size
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - B
    Select the input image:SuccEst
    Number of pixels by which to expand the primary objects:250
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    Name the outline image:cell_outline
    Retain outlines of the identified secondary objects?:Yes
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.05,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Method to calculate adaptive window size:Image size
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
RescaleIntensity:[module_num:7|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
    Select the input image:Capsid
    Name the output image:RescaledRed
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.24,0.8
    Intensity range for the output image:0,1.0
    Method to rescale pixels below the lower limit:Set to zero
    Custom value for pixels below lower limit:0.0
    Method to rescale pixels above the upper limit:Set to one
    Custom value for pixels above upper limit:0.0
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:RescaledRed
    Name the primary objects to be identified:Capsids
    Typical diameter of objects, in pixel units (Min,Max):2,8
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:capsid_outline
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Erase
    Maximum number of objects:1500
    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.4
    Lower and upper bounds on threshold:0.03,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Method to calculate adaptive window size:Image size
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:vDNA
    Name the primary objects to be identified:Genomes
    Typical diameter of objects, in pixel units (Min,Max):2,8
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Name the outline image:vDNA_outline
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Erase
    Maximum number of objects:200
    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:RobustBackground
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.04,1.0
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    Method to calculate adaptive window size:Image size
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
MaskObjects:[module_num:10|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
    Select objects to be masked:Capsids
    Name the masked objects:Cell_capsids
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Retain outlines of the resulting objects?:No
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    Invert the mask?:No

MaskObjects:[module_num:11|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
    Select objects to be masked:Genomes
    Name the masked objects:Cell_genomes
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Retain outlines of the resulting objects?:No
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    Invert the mask?:No

MaskObjects:[module_num:12|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
    Select objects to be masked:Genomes
    Name the masked objects:Nucleus_genomes
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Retain outlines of the resulting objects?:No
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    Invert the mask?:No

MaskObjects:[module_num:13|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
    Select objects to be masked:Capsids
    Name the masked objects:Nucleus_capsids
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Retain outlines of the resulting objects?:No
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    Invert the mask?:No

RelateObjects:[module_num:14|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
    Select the input child objects:Cell_capsids
    Select the input parent objects:Nuclei
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
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
RelateObjects:[module_num:15|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
    Select the input child objects:Cell_genomes
    Select the input parent objects:Nuclei
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
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
RelateObjects:[module_num:16|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
    Select the input child objects:Cell_capsids
    Select the input parent objects:Cells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
RelateObjects:[module_num:17|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
    Select the input child objects:Cell_genomes
    Select the input parent objects:Cells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
MeasureObjectIntensity:[module_num:18|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notes:['Measure intensity features from nuclei and cell objects against the cropped DAPI image.']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
    Hidden:3
    Select an image to measure:Capsid
    Select an image to measure:vDNA
    Select an image to measure:DAPI
    Select objects to measure:Cell_capsids
    Select objects to measure:Cells
    Select objects to measure:Nuclei

OverlayOutlines:[module_num:19|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:SuccEst
    Name the output image:Cell_Overlay
    Outline display mode:Color
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    Width of outlines:1
    Select outlines to display:cell_outline
    Select outline color:yellow
    Load outlines from an image or objects?:Image
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
OverlayOutlines:[module_num:20|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Capsid
    Name the output image:Capsid_Overlay
    Outline display mode:Color
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    Width of outlines:1
    Select outlines to display:capsid_outline
    Select outline color:Red
    Load outlines from an image or objects?:Image
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
OverlayOutlines:[module_num:21|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:vDNA
    Name the output image:Genome_Overlay
    Outline display mode:Color
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    Width of outlines:1
    Select outlines to display:vDNA_outline
    Select outline color:green
    Load outlines from an image or objects?:Image
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
OverlayOutlines:[module_num:22|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DAPI
    Name the output image:vDNA_DAPI_overlay
    Outline display mode:Color
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    Width of outlines:1
    Select outlines to display:vDNA_outline
    Select outline color:green
    Load outlines from an image or objects?:Image
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
SaveImages:[module_num:23|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notes:['Save the color image as an 8-bit TIF, appending the text RBG to the original filename of the DAPI image.']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
    Select the type of image to save:Image
    Select the image to save:Cell_Overlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_\\\\g<sample>_cell_outline
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:Capsid_Overlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Capsid
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_\\\\g<sample>_capsid_outline
    Saved file format:tiff
    Output file location:Default Output Folder|Documents\\\\\\\\Experiments\\\\\\\\150817 siRNAs click\\\\\\\\CP_output\\\\\\\\images
    Image bit depth:16
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:25|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
    Select the type of image to save:Image
    Select the image to save:vDNA_DAPI_overlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Capsid
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_\\\\g<sample>_vDNA_DAPI
    Saved file format:tiff
    Output file location:Default Output Folder|Documents\\\\\\\\Experiments\\\\\\\\150817 siRNAs click\\\\\\\\CP_output\\\\\\\\images
    Image bit depth:16
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:Genome_Overlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:vDNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_\\\\g<sample>_vDNA_outline
    Saved file format:tiff
    Output file location:Default Output Folder|Documents\\\\\\\\Experiments\\\\\\\\150817 siRNAs click\\\\\\\\CP_output\\\\\\\\images
    Image bit depth:16
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:27|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:Null
    Add a prefix to file names?:No
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    Overwrite without warning?:No
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